PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = psychopy
  keyboardBackend = ioHub
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Routines
  Routine Consent
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent ConsentText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your participation in this study is completely voluntary. Your responses will be kept anonymous and confidential. Additionally, any personal information you submit will be kept private as well. In this particular experiment, you will be asked to determine whether a presented image represents an animate or inanimate entity. This research involves no more risk than encountered in everyday life. There is also no direct benefit for you to participate in this study, beyond the compensation agreed upon with the lab. Please note whether you consent to participate in this survey down below.

        Press space bar to continue.
  Routine Welcome
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This particular experiment aims to measure each participant’s level of prosociality. It is part of a broader experiment designed to increase levels of prosociality through mindfulness meditation interventions.

        Press space bar to continue.
    VariableComponent fontsize
      startExpValue = 0.05
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  Routine StudyTrial
    TextComponent text
      color [set every repeat] = $WordColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $WordItem
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  Routine Blank500
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine ImageStudyTrial
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = any click
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      timeRelativeTo = joystick onset
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  Routine GeneralInstructions
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent InstructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This experiment involves the use of image stimuli and a joystick. You will be presented with an image that will be either animate or inanimate, but not both. Please use your best judgment if this distinction seems unclear for any of the images. You will need to either push or pull the joystick, depending on whether the image is animate or inanimate.

        Press space bar to continue.
  Routine Rest
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Rest period.

        Press space bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageTests1
    ImageComponent image_2
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    JoyButtonsComponent button_resp
      allowedKeys = 0,1,2,3,4
      deviceNumber = 0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine PracticeInstructions1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will begin the practice trial for this phase. Please push the joystick if you believe the image to be animate, or pull the joystick if you believe the image to be inanimate.

        Press space bar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInstructions1
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with the official images that will be used for data collection in this phase. Please inform the researcher if you have any questions thus far, and note that there will be a slight break after every 20 images.

        Press space bar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GeneralInstructions2
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be instructed whether to push for animate or pull for animate (along with the instructions for inanimate images, which will be opposite that for animate images) before each phase of the experiment. There will be two phases of the experiment, with each phase containing a total of 90 images–10 of which will be practice images presented before the data collection begins. Please push or pull as quickly as possible, as your reaction time will be measured.

        Press space bar to continue.
  Routine ImageTest2
    KeyboardComponent key_resp_10
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_3
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest3
    KeyboardComponent key_resp_11
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_4
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest4
    KeyboardComponent key_resp_12
      allowedKeys = '1','2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_5
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine StudyTrial2
    KeyboardComponent key_resp_14
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine PracticeInstructions2
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will begin the practice trial for this phase. Please push the joystick if you believe the image to be inanimate, or pull the joystick if you believe the image to be animate.

        Press space bar to continue.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestInstructions2
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be presented with the official images that will be used for data collection in this phase. Please inform the researcher if you have any questions thus far, and note that there will be a slight break after every 20 images.

        Press space bar to continue.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ImageTest5
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  Routine ImageTest6
    KeyboardComponent key_resp_17
      allowedKeys = '1', '2'
      correctAns = $AnimateInanimate
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image_8
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ImageTest7
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  Routine ImageTest8
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  Routine End_Experiment
    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment has now ended.

         As noted earlier, this particular experiment aims to measure each participant’s level of prosociality. That was done by measuring the reaction time difference between how long it takes for each participant to push for certain images and to pull for certain other images, as organized by animate/inanimate status and valence. It is part of a broader experiment designed to increase levels of prosociality through mindfulness meditation interventions.

        Thank you for being part of the experiment, and please feel free to contact the researcher if you have any further questions.
Flow
  Routine Welcome
  Routine Blank500
  Routine Consent
  Routine Blank500
  Routine GeneralInstructions
  Routine Blank500
  Routine GeneralInstructions2
  Routine Blank500
  LoopInitiator controlTaskOrder loopType="TrialHandler"
    conditionsFile = $'conditions'+expInfo['group']+'.xlsx'
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator part1 loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask1
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      Routine PracticeInstructions1
      LoopInitiator trialsStudyImages loopType="TrialHandler"
        Selected rows = 0:10
        conditionsFile = ImagePractices1.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Goat 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Happy face 2.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Lion 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Monkey 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Dog 12.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Gun 5.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Money 1.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Office supplies 4.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Sidewalk 3.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Storage 1.jpg', 'AnimateInanimate': 2}]
        Routine ImageStudyTrial
        Routine Blank500
      LoopTerminator trialsStudyImages
      Routine TestInstructions1
      LoopInitiator trialsTest1_1 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests1.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Fire 7.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.7007, 'Rand': 0.6719101083569338},
          {'ImageFile': 'Images/Birthday 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.5506, 'Rand': 0.46285993459803654},
          {'ImageFile': 'Images/Soldiers 7.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5465, 'Rand': 0.9977797084285572},
          {'ImageFile': 'Images/Police 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.4345, 'Rand': 0.07517344267112913},
          {'ImageFile': 'Images/Jail 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.9691, 'Rand': 0.03865937602444702},
          {'ImageFile': 'Images/Baby 6.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0604, 'Rand': 0.39030199076009964},
          {'ImageFile': 'Images/Neonazi 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.0577, 'Rand': 0.8848283844025013},
          {'ImageFile': 'Images/Toilet 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.4986, 'Rand': 0.898260773201397},
          {'ImageFile': 'Images/Yarn 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5645, 'Rand': 0.6029614127731355},
          {'ImageFile': 'Images/Bird 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0495, 'Rand': 0.1352931607121708},
          {'ImageFile': 'Images/Picnic 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0998, 'Rand': 0.10131694427212556},
          {'ImageFile': 'Images/Sad pose 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.8801, 'Rand': 0.568733967121452},
          {'ImageFile': 'Images/Massage 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.7288, 'Rand': 0.7429463957737557}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
        Routine ImageTests1
        Routine Blank500
      LoopTerminator trialsTest1_1
      Routine Rest
      LoopInitiator trialsTest1_2 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests2.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Elephant 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.8272, 'Rand': 0.04936767057029101},
          {'ImageFile': 'Images/Flowers 6.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.9556, 'Rand': 0.9522082233542238},
          {'ImageFile': 'Images/Gun 6.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.9016, 'Rand': 0.8898260865812544},
          {'ImageFile': 'Images/Flowers 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.8142, 'Rand': 0.4043503429350359},
          {'ImageFile': 'Images/Lake 10.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.125, 'Rand': 0.2984734891266426},
          {'ImageFile': 'Images/Hangover 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.3921, 'Rand': 0.26033231155499936},
          {'ImageFile': 'Images/Lake 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.3635, 'Rand': 0.9852323328940595},
          {'ImageFile': 'Images/Fireworks 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0651, 'Rand': 0.6231357771831161},
          {'ImageFile': 'Images/Couple 8.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.7678, 'Rand': 0.251731948819934},
          {'ImageFile': 'Images/Frustrated pose 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.6481, 'Rand': 0.04964889787021731},
          {'ImageFile': 'Images/Bridge 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.9383, 'Rand': 0.9690828349581032},
          {'ImageFile': 'Images/Galaxy 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.7867, 'Rand': 0.11173582871170518},
          {'ImageFile': 'Images/Garbage dump 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.0219, 'Rand': 0.24903094943803883}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
        Routine ImageTest2
        Routine Blank500
      LoopTerminator trialsTest1_2
      Routine Rest
      LoopInitiator trialsTest1_3 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests3.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Sleepy pose 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.603, 'Rand': 0.943587941998371},
          {'ImageFile': 'Images/Fireworks 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.277, 'Rand': 0.7624740227305116},
          {'ImageFile': 'Images/Lake 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.9732, 'Rand': 0.8210013894467229},
          {'ImageFile': 'Images/Bloody knife 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.8704, 'Rand': 0.2946696303452925},
          {'ImageFile': 'Images/Mother 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0784, 'Rand': 0.07013481274686417},
          {'ImageFile': 'Images/Flowers 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.8142, 'Rand': 0.854176312029122},
          {'ImageFile': 'Images/Sad pose 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.8282, 'Rand': 0.40245968533442955},
          {'ImageFile': 'Images/Angry face 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5188, 'Rand': 0.48977527867005466},
          {'ImageFile': 'Images/Snake 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.4159, 'Rand': 0.32476122568777466},
          {'ImageFile': 'Images/Baby 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.1553, 'Rand': 0.5652809593512679},
          {'ImageFile': 'Images/Cold 8.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.5742, 'Rand': 0.1876411890461065},
          {'ImageFile': 'Images/Wedding 6.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0481, 'Rand': 0.533854831214882},
          {'ImageFile': 'Images/Miserable pose 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5702, 'Rand': 0.057736864775737584}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
        Routine ImageTest3
        Routine Blank500
      LoopTerminator trialsTest1_3
      Routine Rest
      LoopInitiator trialsTest1_4 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests4.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Dirt 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.6168, 'Rand': 0.7915235630823373},
          {'ImageFile': 'Images/Destruction 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.1143, 'Rand': 0.9714971767863325},
          {'ImageFile': 'Images/Tornado 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.7192, 'Rand': 0.1922600838963734},
          {'ImageFile': 'Images/Frustrated pose 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.3937, 'Rand': 0.6202580475217457},
          {'ImageFile': 'Images/Cat 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.1842, 'Rand': 0.21190688989104334},
          {'ImageFile': 'Images/Scared face 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 3.0377, 'Rand': 0.020543888563642865},
          {'ImageFile': 'Images/Gun 10.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5934, 'Rand': 0.45300295686118053},
          {'ImageFile': 'Images/Jail 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 3.0599, 'Rand': 0.5416990831243563},
          {'ImageFile': 'Images/Rainbow 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.2286, 'Rand': 0.004794842477892414},
          {'ImageFile': 'Images/Destruction 10.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.0682, 'Rand': 0.46026722025944866},
          {'ImageFile': 'Images/Frustrated pose 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.481, 'Rand': 0.4877464117223763},
          {'ImageFile': 'Images/Dog 19.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.9814, 'Rand': 0.7413275084961816},
          {'ImageFile': 'Images/Injury 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.4052, 'Rand': 0.5319739147710393}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
        Routine ImageTest4
        Routine Blank500
      LoopTerminator trialsTest1_4
    LoopTerminator part1
    LoopInitiator part2 loopType="TrialHandler"
      loopType = random
      nReps = nRepsTask2
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      Routine PracticeInstructions2
      LoopInitiator trialsStudyImages2 loopType="TrialHandler"
        Selected rows = 0:10
        conditionsFile = ImagePractices2_inherently_reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Surprise 2.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Tiger 2.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Shark 7.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Sad face 1.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Pigeon 4.jpg', 'AnimateInanimate': 2},
          {'ImageFile': 'Images/Yarn 4.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Wedding 7.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Storage 3.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Socks 1.jpg', 'AnimateInanimate': 1},
          {'ImageFile': 'Images/Rocks 3.jpg', 'AnimateInanimate': 1}]
        Routine StudyTrial2
        Routine Blank500
      LoopTerminator trialsStudyImages2
      Routine TestInstructions2
      LoopInitiator trialsTestImages2_1 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests1_Reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Fire 7.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.7007, 'Rand': 0.2575505223871397},
          {'ImageFile': 'Images/Birthday 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.5506, 'Rand': 0.319524409358253},
          {'ImageFile': 'Images/Soldiers 7.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5465, 'Rand': 0.2696768289046516},
          {'ImageFile': 'Images/Police 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.4345, 'Rand': 0.6054784475062427},
          {'ImageFile': 'Images/Jail 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.9691, 'Rand': 0.8398600376243888},
          {'ImageFile': 'Images/Baby 6.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0604, 'Rand': 0.7516402056790349},
          {'ImageFile': 'Images/Neonazi 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.0577, 'Rand': 0.2661110498977508},
          {'ImageFile': 'Images/Toilet 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.4986, 'Rand': 0.24701919740172684},
          {'ImageFile': 'Images/Yarn 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5645, 'Rand': 0.9087927786187595},
          {'ImageFile': 'Images/Bird 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0495, 'Rand': 0.012961172525481013},
          {'ImageFile': 'Images/Picnic 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0998, 'Rand': 0.8333126648555074},
          {'ImageFile': 'Images/Sad pose 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.8801, 'Rand': 0.19381369440426544},
          {'ImageFile': 'Images/Massage 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.7288, 'Rand': 0.884560452207011}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
        Routine ImageTest5
        Routine Blank500
      LoopTerminator trialsTestImages2_1
      Routine Rest
      LoopInitiator trialsTestImages2_2 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests2_Reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Elephant 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.8272, 'Rand': 0.727686106610318},
          {'ImageFile': 'Images/Flowers 6.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.9556, 'Rand': 0.947680247901311},
          {'ImageFile': 'Images/Gun 6.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.9016, 'Rand': 0.5624552116796375},
          {'ImageFile': 'Images/Flowers 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.8142, 'Rand': 0.5523292819921903},
          {'ImageFile': 'Images/Lake 10.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.125, 'Rand': 0.5595361608030758},
          {'ImageFile': 'Images/Hangover 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.3921, 'Rand': 0.5202939654083889},
          {'ImageFile': 'Images/Lake 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.3635, 'Rand': 0.6280847881706122},
          {'ImageFile': 'Images/Fireworks 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.0651, 'Rand': 0.6482747677270315},
          {'ImageFile': 'Images/Couple 8.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.7678, 'Rand': 0.2950874497117757},
          {'ImageFile': 'Images/Frustrated pose 2.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.6481, 'Rand': 0.9835247849574866},
          {'ImageFile': 'Images/Bridge 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.9383, 'Rand': 0.7280776864007487},
          {'ImageFile': 'Images/Galaxy 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.7867, 'Rand': 0.3193577863328001},
          {'ImageFile': 'Images/Garbage dump 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.0219, 'Rand': 0.350393201470347}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
        Routine ImageTest6
        Routine Blank500
      LoopTerminator trialsTestImages2_2
      Routine Rest
      LoopInitiator trialsTestImages2_3 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests3_Reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Sleepy pose 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.603, 'Rand': 0.5695928638932991},
          {'ImageFile': 'Images/Fireworks 2.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.277, 'Rand': 0.6055150196406405},
          {'ImageFile': 'Images/Lake 3.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.9732, 'Rand': 0.6891933661322509},
          {'ImageFile': 'Images/Bloody knife 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.8704, 'Rand': 0.45545292684693384},
          {'ImageFile': 'Images/Mother 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0784, 'Rand': 0.30943906106936125},
          {'ImageFile': 'Images/Flowers 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.8142, 'Rand': 0.503281834412867},
          {'ImageFile': 'Images/Sad pose 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.8282, 'Rand': 0.6332941131495494},
          {'ImageFile': 'Images/Angry face 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5188, 'Rand': 0.9422085734809273},
          {'ImageFile': 'Images/Snake 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.4159, 'Rand': 0.2912919094636932},
          {'ImageFile': 'Images/Baby 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.1553, 'Rand': 0.727386849229867},
          {'ImageFile': 'Images/Cold 8.jpg', 'AnimateInanimate': 1, 'ValenceScore': 5.5742, 'Rand': 0.09933488783748268},
          {'ImageFile': 'Images/Wedding 6.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.0481, 'Rand': 0.12578285099061193},
          {'ImageFile': 'Images/Miserable pose 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.5702, 'Rand': 0.44043728161656215}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
        Routine ImageTest7
        Routine Blank500
      LoopTerminator trialsTestImages2_3
      Routine Rest
      LoopInitiator trialsTestImages2_4 loopType="TrialHandler"
        Selected rows = 0:20
        conditionsFile = ImageTests4_Reversed.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'ImageFile': 'Images/Dirt 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 1.6168, 'Rand': 0.8641851555207473},
          {'ImageFile': 'Images/Destruction 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.1143, 'Rand': 0.8473229050515173},
          {'ImageFile': 'Images/Tornado 4.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.7192, 'Rand': 0.04936946157030331},
          {'ImageFile': 'Images/Frustrated pose 1.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.3937, 'Rand': 0.03736251433619431},
          {'ImageFile': 'Images/Cat 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 6.1842, 'Rand': 0.925145681368713},
          {'ImageFile': 'Images/Scared face 3.jpg', 'AnimateInanimate': 2, 'ValenceScore': 3.0377, 'Rand': 0.7014743464246805},
          {'ImageFile': 'Images/Gun 10.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.5934, 'Rand': 0.6500433630452547},
          {'ImageFile': 'Images/Jail 5.jpg', 'AnimateInanimate': 1, 'ValenceScore': 3.0599, 'Rand': 0.9658964890878704},
          {'ImageFile': 'Images/Rainbow 1.jpg', 'AnimateInanimate': 1, 'ValenceScore': 6.2286, 'Rand': 0.5870321768895581},
          {'ImageFile': 'Images/Destruction 10.jpg', 'AnimateInanimate': 1, 'ValenceScore': 2.0682, 'Rand': 0.30995496066927364},
          {'ImageFile': 'Images/Frustrated pose 5.jpg', 'AnimateInanimate': 2, 'ValenceScore': 2.481, 'Rand': 0.9455762268937861},
          {'ImageFile': 'Images/Dog 19.jpg', 'AnimateInanimate': 2, 'ValenceScore': 5.9814, 'Rand': 0.19321400487729756},
          {'ImageFile': 'Images/Injury 4.jpg', 'AnimateInanimate': 2, 'ValenceScore': 1.4052, 'Rand': 0.9002331061243214}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
        Routine ImageTest8
        Routine Blank500
      LoopTerminator trialsTestImages2_4
    LoopTerminator part2
  LoopTerminator controlTaskOrder
  Routine End_Experiment
