PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    JoystickComponent joystick
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      timeRelativeTo = joystick onset
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    GratingComponent grating
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = sin
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        my_xpositions = []
        my_ypositions = []
        my_times = []
      Each Frame:
        myx = joystick.getX()
        myy = joystick.getY()
        myt = joystick.joystickClock.getTime()

        my_xpositions.append(myx)
        my_ypositions.append(myy)
        my_times.append(myt)

        #logging.data("xpos = {}, ypos = {}, time={}".format(myx, myy, myt))
      End Routine:
        trials_2.addData('joystick.x_', my_xpositions)
        trials_2.addData('joystick.y_', my_ypositions)
        trials_2.addData('joystick.t_', my_times)
    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ITI
    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine ITI
    Routine trial
  LoopTerminator trials_2
